PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -0.6314, -0.3804, -0.3804
  expName = spl_exp
  frameRateMsg = Tarea cargando, por favor espere...
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine list_setup
    RoutineSettingsComponent list_setup
      saveStartStop = False
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    CodeComponent list
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import gui, core

        # Which list to use?
        dlg = gui.Dlg(title="Select List")
        dlg.addField("List number (1–2):")
        ok_data = dlg.show()

        if dlg.OK:
            list_num = ok_data[0]
        else:
            core.quit()  # closes the experiment if Cancel is pressed

        # --- Build the filename dynamically ---
        conditions_file = f"spl_stim_exp1_{list_num}.csv"
        print(f"Using condition file: {conditions_file}")
      Begin Experiment:
        import pandas as pd
        import random

        # Load condition file for this list
        df = pd.read_csv(conditions_file)

        # Extract unique item_ids
        items = df["item_id"].unique().tolist()

        # Separate items by type (ending in d or p)
        items_d = [it for it in items if it.endswith("d")]
        items_p = [it for it in items if it.endswith("p")]

        random.shuffle(items_d)
        random.shuffle(items_p)

        final_order = []

        # Pick items one by one while ensuring no 3 in a row
        while items_d or items_p:

            # Determine which list to draw from
            if len(final_order) >= 2:
                last1 = final_order[-1][-1]
                last2 = final_order[-2][-1]

                # If last two end in d → must choose p
                if last1 == last2 == "d" and items_p:
                    choice = "p"

                # If last two end in p → must choose d
                elif last1 == last2 == "p" and items_d:
                    choice = "d"

                else:
                    # Otherwise choose whichever has more remaining items
                    choice = "d" if len(items_d) >= len(items_p) else "p"

            else:
                # First two items: choose from whichever has more
                choice = "d" if len(items_d) >= len(items_p) else "p"

            # Draw the item
            if choice == "d" and items_d:
                final_order.append(items_d.pop())
            elif choice == "p" and items_p:
                final_order.append(items_p.pop())
            else:
                # fallback if one list empties
                if items_d:
                    final_order.append(items_d.pop())
                else:
                    final_order.append(items_p.pop())

        print("Randomized item order:", final_order)

        # ---- Convert item order into row indices ----
        new_order = []
        for it in final_order:
            rows = df.index[df["item_id"] == it].tolist()
            new_order.extend(rows)

        trial_list = new_order
      End Routine:
        # Compute which row to read from the question file
        question_row = [int(list_num) - 1]
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent intructions
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muy bien! A continuación, haremos la tarea en limpio.

        Recuerde presionar el boton marcado para seguir escuchando las oraciones.

        Despues de cada oracion, recuerde responder la pregunta presionando uno de los botones marcados.
    TextComponent text_continuar
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 8.0
      text = [Presione el boton marcado para comenzar la prueba]
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    KeyboardComponent instructions_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 8.0
      store = nothing
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    SoundComponent intro_prueba
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = audio/intro_seg2.wav
      startVal [time (s)] = 0.0
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  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    SoundComponent audios
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $'C:/Users/AAPL/Desktop/SPL_Gabi/exp_1/audio/' + audio_file
      startVal [time (s)] = 0.0
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    CodeComponent main_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import event, core
      Begin Routine:
        if segment_number == 8:
            continueRoutine = False

        # Get audio duration in seconds from CSV
        min_wait_time = duration_ms / 1000

        # Start a clock for the trial
        routine_clock = core.Clock()

        # Prevent spacebar presses before the audio finishes
        event.clearEvents(eventType='keyboard')

        # Variables to track spacebar press
        space_pressed = False
        spacebar_rt = None
        audio_finished = False
      Each Frame:
        current_time = routine_clock.getTime()

        # Mark when audio has finished playing
        if current_time >= min_wait_time and not audio_finished:
            audio_finished = True
            event.clearEvents(eventType='keyboard')
            print(f"Audio finished at: {current_time:.3f}s, now accepting spacebar.")

        # Allow spacebar only after audio ends
        if audio_finished and not space_pressed:
            keys = event.getKeys(keyList=['space'], timeStamped=routine_clock)
            if keys:
                space_pressed = True
                spacebar_rt = keys[0][1]  # in seconds

                # Calculate timing
                spacebar_rt_ms = spacebar_rt * 1000
                reaction_time_ms = spacebar_rt_ms - duration_ms

                print(f"Pressed SPACE at {spacebar_rt:.3f}s ({reaction_time_ms:.2f} ms after audio).")

                # Save to PsychoPy's data file
                thisExp.addData('spacebar_rt_ms', spacebar_rt_ms)
                thisExp.addData('reaction_time_ms', reaction_time_ms)
                continueRoutine = False
      End Routine:
        event.clearEvents(eventType='keyboard')
    TextComponent cross
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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  Routine blp_bio
    RoutineSettingsComponent blp_bio
      saveStartStop = False
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    CodeComponent code_bio
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Start with Siguiente disabled
        canContinue = False
        boton_bio.opacity = 0.5  # make it look disabled
        boton_bio.color = 'gray'
      Each Frame:
        # Check if all fields are filled (no empty textboxes)
        textboxes = [nombre, edad, genero, nacimiento, vive, mama, papa, educacion]  # adapt to your routine

        filled = all(len(tb.text.strip()) > 0 for tb in textboxes)

        # Enable Siguiente only when all are filled
        if filled and not canContinue:
            canContinue = True
            boton_bio.opacity = 1
            boton_bio.color = 'white'
        elif not filled:
            canContinue = False
            boton_bio.opacity = 0.5
            boton_bio.color = 'gray'

        # Only allow clicking Siguiente if validated
        if boton_bio.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_bio
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (1/8)
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    TextComponent indicaciones_bio
      letterHeight = 0.04
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. Información Biográfica
        Por favor complete los campos y haga clic en Siguiente.
    TextComponent text_nombre
      letterHeight = 0.04
      pos = (-0.38, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nombre 
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    TextboxComponent nombre
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, 0.30)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_edad
      letterHeight = 0.04
      pos = (-0.38, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Edad
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    TextboxComponent edad
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, 0.20)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_genero
      letterHeight = 0.04
      pos = (-0.38, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Género (Hombre / Mujer / Otro)
    TextboxComponent genero
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, 0.10)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_nacimiento
      letterHeight = 0.04
      pos = (-0.38, 0.0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Lugar donde nació
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    TextboxComponent nacimiento
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, 0.0)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_vive
      letterHeight = 0.04
      pos = (-0.38, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Lugar donde vive ahora (ciudad/barrio)
    TextboxComponent vive
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, -0.10)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_mama
      letterHeight = 0.04
      pos = (-0.38, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Lengua(s) que habla su mamá?
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    TextboxComponent mama
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, -0.20)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_papa
      letterHeight = 0.04
      pos = (-0.38, -0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Lengua(s) que habla su papá? 
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    TextboxComponent papa
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, -0.30)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_educacion
      letterHeight = 0.04
      pos = (-0.38, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Nivel más alto de educación?
    TextboxComponent educacion
      autoLog = False
      bold = False
      editable = True
      letterHeight = 0.04
      placeholder = Escriba aquí… / Qillqay kaypi…
      pos = (0.38, -0.40)
      saveStartStop = False
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
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  Routine blp_historial_1
    RoutineSettingsComponent blp_historial_1
      saveStartStop = False
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    CodeComponent code_historial
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            edad_aprender_que,
            edad_aprender_esp,
            edad_comodidad_que,
            edad_comodidad_esp,
            años_clases_que,
            años_clases_esp
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" button once all are filled
        if filled and not canContinue:
            canContinue = True
            boton_historial.opacity = 1
            boton_historial.color = 'white'
        elif not filled:
            canContinue = False
            boton_historial.opacity = 0.5
            boton_historial.color = 'gray'

        # Only allow "Siguiente" to continue if all answered
        if boton_historial.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_historial
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (2/8)
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    TextComponent indicaciones_historial
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        2. Historial lingüístico
        Por favor marque la casilla que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_edad_q
      letterHeight = 0.03
      pos = (-0.5, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿A qué edad empezó a aprender el quechua?
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    SliderComponent edad_aprender_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.25, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_edad_esp
      letterHeight = 0.03
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿A qué edad empezó a aprender el español?
    SliderComponent edad_aprender_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.25, 0.15)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_comodidad_que
      letterHeight = 0.03
      pos = (-0.5, -0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿A qué edad empezó a usar el Quechua con comodidad?
    SliderComponent edad_comodidad_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, 0)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_comodidad_esp
      letterHeight = 0.03
      pos = (-0.5, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿A qué edad empezó a usar el Español con comodidad?
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    SliderComponent edad_comodidad_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_clases_que
      letterHeight = 0.027
      pos = (-0.48, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años de clases (gramática, historia, matemáticas, etc.)
        ha tenido en Quechua (desde la escuela a la universidad)?
    SliderComponent años_clases_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_clases_esp
      letterHeight = 0.027
      pos = (-0.48, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años de clases (gramática, historia, matemáticas, etc.)
        ha tenido en Castellano(desde la escuela a la universidad)?
    SliderComponent años_clases_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, -0.30)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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  Routine blp_historial_2
    RoutineSettingsComponent blp_historial_2
      saveStartStop = False
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    CodeComponent code_historial_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Disable "Siguiente" at start
        canContinue = False
        boton_historial_2.opacity = 0.5
        boton_historial_2.color = 'gray'
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            años_comunidad_que,
            años_comunidad_esp,
            años_familia_que,
            años_familia_esp,
            años_trabajo_que,
            años_trabajo_esp
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" once all sliders have responses
        if filled and not canContinue:
            canContinue = True
            boton_historial_2.opacity = 1
            boton_historial_2.color = 'white'
        elif not filled:
            canContinue = False
            boton_historial_2.opacity = 0.5
            boton_historial_2.color = 'gray'

        # Allow next only when all responses are made
        if boton_historial_2.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_historial_2
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (3/8)
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    TextComponent indicaciones_historial_2
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        2. Historial lingüístico
        Por favor marque la casilla que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_comunidad_que
      letterHeight = 0.03
      pos = (-0.5, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años ha vivido en una comunidad
        donde se habla Quechua?
    SliderComponent años_comunidad_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.25, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_comunidad_esp
      letterHeight = 0.03
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años ha vivido en una comunidad
        donde se habla Castellano?
    SliderComponent años_comunidad_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.25, 0.15)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_familia_que
      letterHeight = 0.03
      pos = (-0.5, -0.025)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años ha pasado hablando Quechua
        con su familia?
    SliderComponent años_familia_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, 0)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_familia_esp
      letterHeight = 0.03
      pos = (-0.5, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años ha pasado hablando Castellano
        con su familia?
    SliderComponent años_familia_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_trabajo_que
      letterHeight = 0.03
      pos = (-0.48, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años ha trabajado en un ambiente
        donde se habla Quechua?
    SliderComponent años_trabajo_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_trabajo_esp
      letterHeight = 0.03
      pos = (-0.48, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuántos años ha trabajado en un ambiente
        donde se habla Castellano?
    SliderComponent años_trabajo_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20+')
      letterHeight = 0.021
      pos = (0.35, -0.30)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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  Routine blp_uso_1
    RoutineSettingsComponent blp_uso_1
      saveStartStop = False
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    CodeComponent code_uso
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Disable "Siguiente" at start
        canContinue = False
        boton_uso.opacity = 0.5
        boton_uso.color = 'gray'
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            porc_amigos_que,
            porc_amigos_esp,
            porc_amigos_otr,
            porc_familia_que,
            porc_familia_esp,
            porc_familia_otr
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" button once all are filled
        if filled and not canContinue:
            canContinue = True
            boton_uso.opacity = 1
            boton_uso.color = 'white'
        elif not filled:
            canContinue = False
            boton_uso.opacity = 0.5
            boton_uso.color = 'gray'

        # Allow next only when all responses are made
        if boton_uso.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_uso
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (4/8)
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    TextComponent indicaciones_uso
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3. El uso de lenguas
        Por favor eleccione la opcion que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_amigos_que
      letterHeight = 0.03
      pos = (-0.5, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Quechua
        con sus amigos
    SliderComponent porc_amigos_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.25, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_amigos_esp
      letterHeight = 0.03
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Castellano
        con sus amigos
    SliderComponent porc_amigos_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.25, 0.15)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_amigos_otr
      letterHeight = 0.03
      pos = (-0.5, -0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Otras Lenguas
        con sus amigos
    SliderComponent porc_amigos_otr
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, 0)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent porcent_familia_que
      letterHeight = 0.03
      pos = (-0.5, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Quechua
        con su familia
    SliderComponent porc_familia_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent porcent_familia_esp
      letterHeight = 0.03
      pos = (-0.48, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Castellano
        con su familia
    SliderComponent porc_familia_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent porcent_familia_otr
      letterHeight = 0.03
      pos = (-0.48, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa
        Otras Lenguas con su familia
    SliderComponent porc_familia_otr
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.30)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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  Routine blp_uso_2
    RoutineSettingsComponent blp_uso_2
      saveStartStop = False
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    CodeComponent code_uso_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Disable "Siguiente" at start
        canContinue = False
        boton_uso_2.opacity = 0.5
        boton_uso_2.color = 'gray'
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            porc_formal_que,
            porc_formal_esp,
            porc_formal_otr,
            porc_trabajo_que,
            porc_trabajo_esp,
            porc_trabajo_otr
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" button once all are filled
        if filled and not canContinue:
            canContinue = True
            boton_uso_2.opacity = 1
            boton_uso_2.color = 'white'
        elif not filled:
            canContinue = False
            boton_uso_2.opacity = 0.5
            boton_uso_2.color = 'gray'

        # Allow next only when all responses are made
        if boton_uso_2.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_uso_2
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (5/8)
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    TextComponent indicaciones_uso_2
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3. El uso de lenguas
        Por favor eleccione la opcion que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_formal_que
      letterHeight = 0.03
      pos = (-0.5, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Quechua
        en ambientes formales (educación, alcaldía)
    SliderComponent porc_formal_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.25, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_formal_esp
      letterHeight = 0.03
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Castellano
        en ambientes formales (educación, alcaldía)
    SliderComponent porc_formal_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.25, 0.15)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_formal_otr
      letterHeight = 0.03
      pos = (-0.5, -0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa
        Otras Lenguas en ambientes formales
        (educación, alcaldía)
    SliderComponent porc_formal_otr
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, 0)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent porct_trabajo_que
      letterHeight = 0.03
      pos = (-0.5, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Quechua
        en el trabajo
    SliderComponent porc_trabajo_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent porct_trabajo_esp
      letterHeight = 0.03
      pos = (-0.48, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa Castellano
        en el trabajo
    SliderComponent porc_trabajo_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent porct_trabajo_otr
      letterHeight = 0.03
      pos = (-0.48, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que usa
        Otras Lenguas en el trabajo
    SliderComponent porc_trabajo_otr
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.30)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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  Routine blp_uso_3
    RoutineSettingsComponent blp_uso_3
      saveStartStop = False
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    CodeComponent code_uso_3
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Disable "Siguiente" at start
        canContinue = False
        boton_uso_3.opacity = 0.5
        boton_uso_3.color = 'gray'
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            porc_mismo_que,
            porc_mismo_esp,
            porc_mismo_otr,
            porc_calculos_que,
            porc_calculos_esp,
            porc_calculos_otr
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" button once all are filled
        if filled and not canContinue:
            canContinue = True
            boton_uso_3.opacity = 1
            boton_uso_3.color = 'white'
        elif not filled:
            canContinue = False
            boton_uso_3.opacity = 0.5
            boton_uso_3.color = 'gray'

        # Allow next only when all responses are made
        if boton_uso_3.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_uso_3
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (6/8)
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    TextComponent indicaciones_uso_3
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3. El uso de lenguas
        Por favor eleccione la opcion que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_mismo_que
      letterHeight = 0.03
      pos = (-0.5, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que se habla
        a sí mismo en Quechua
    SliderComponent porc_mismo_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.25, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_mismo_esp
      letterHeight = 0.03
      pos = (-0.5, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que se habla
        a sí mismo en Castellano
    SliderComponent porc_mismo_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.25, 0.15)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_mismo_otr
      letterHeight = 0.03
      pos = (-0.5, -0.03)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que se habla
        a sí mismo en Otras Lenguas
    SliderComponent porc_mismo_otr
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, 0)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_calculos_que
      letterHeight = 0.03
      pos = (-0.5, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que cuenta
        o calcula en Quechua
    SliderComponent porc_calculos_que
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_calculos_esp
      letterHeight = 0.03
      pos = (-0.48, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que cuenta
        o calcula en Castellano
    SliderComponent porc_calculos_esp
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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    TextComponent text_calculos_otr
      letterHeight = 0.03
      pos = (-0.48, -0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Porcentaje del tiempo que cuenta
        o calcula en Otras Lenguas
    SliderComponent porc_calculos_otr
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0%','10%','20%','30%','40%','50%','60%','70%','80%','90%','100%')
      letterHeight = 0.025
      pos = (0.35, -0.30)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
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  Routine blp_competencia
    RoutineSettingsComponent blp_competencia
      saveStartStop = False
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    CodeComponent code_competencia
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Disable "Siguiente" at start
        canContinue = False
        boton_competencia.opacity = 0.5
        boton_competencia.color = 'gray'
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            habla_bien_que,
            habla_bien_esp,
            entiende_bien_que,
            entiende_bien_esp,
            lee_bien_que,
            lee_bien_esp,
            escribe_bien_que,
            escribe_bien_esp
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" button once all are filled
        if filled and not canContinue:
            canContinue = True
            boton_competencia.opacity = 1
            boton_competencia.color = 'white'
        elif not filled:
            canContinue = False
            boton_competencia.opacity = 0.5
            boton_competencia.color = 'gray'

        # Allow next only when all responses are made
        if boton_competencia.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_competencia
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (7/8)
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    TextComponent indicaciones_competencia
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        4. Competencia Lingüística
        Por favor eleccione la opcion que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_habla_que
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.7, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Habla bien en Quechua?
    SliderComponent habla_bien_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_habla_esp
      letterHeight = 0.03
      pos = (-0.7, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Habla bien en Castellano?
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    SliderComponent habla_bien_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=may mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0, 0.20)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_entiende_que
      letterHeight = 0.03
      pos = (-0.7, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
           ¿Entiende bien en Quechua?
    SliderComponent entiende_bien_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0, 0.10)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_entiende_esp
      letterHeight = 0.03
      pos = (-0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
            ¿Entiende bien en Castellano?
    SliderComponent entiende_bien_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_lee_que
      letterHeight = 0.03
      pos = (-0.7, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Lee bien en Quechua?
    SliderComponent lee_bien_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_lee_esp
      letterHeight = 0.03
      pos = (-0.7, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Lee bien en Castellano?
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    SliderComponent lee_bien_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_escribe_que
      letterHeight = 0.03
      pos = (-0.7, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Escribe bien en Quechua?
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    SliderComponent escribe_bien_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
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    TextComponent text_escribe_esp
      letterHeight = 0.03
      pos = (-0.7, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Escribe bien en Castellano?
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    SliderComponent escribe_bien_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=muy mal','1','2','3','4','5','6=muy bien')
      letterHeight = 0.02
      pos = (0.0, -0.40)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
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  Routine blp_actitud
    RoutineSettingsComponent blp_actitud
      saveStartStop = False
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    CodeComponent code_actitud
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        # Disable "Siguiente" at start
        canContinue = False
        boton_actitud.opacity = 0.5
        boton_actitud.color = 'gray'
      Each Frame:
        # List of all slider components in this routine
        sliders = [
            yo_mismo_que,
            yo_mismo_esp,
            cultura_que,
            cultura_esp,
            uso_nativo_que,
            uso_nativo_esp,
            hablante_nativo_que,
            hablante_nativo_esp
        ]

        # Check if all sliders have a response
        filled = all(sl.getRating() is not None for sl in sliders)

        # Enable "Siguiente" button once all are filled
        if filled and not canContinue:
            canContinue = True
            boton_actitud.opacity = 1
            boton_actitud.color = 'white'
        elif not filled:
            canContinue = False
            boton_actitud.opacity = 0.5
            boton_actitud.color = 'gray'

        # Allow next only when all responses are made
        if boton_actitud.isClicked and canContinue:
            continueRoutine = False
    ButtonComponent boton_actitud
      bold = True
      fillColor = gray
      forceEndRoutine = False
      letterHeight = 0.035
      oncePerClick = False
      pos = (0.75, -0.45)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Siguiente (8/8)
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    TextComponent indicaciones_actitud
      letterHeight = 0.035
      pos = (0, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        5. Actitudes Lingüísticas
        Por favor eleccione la opcion que cosidere apropiada y haga clic en Siguiente.
    TextComponent text_yomismo_que
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (-0.7, 0.30)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
          Me siento "yo mismo" cuando
        hablo en Quechua
    SliderComponent yo_mismo_que
      color = 1.0000, 1.0000, 1.0000
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0, 0.30)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_yomismo_esp
      letterHeight = 0.03
      pos = (-0.7, 0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
          Me siento "yo mismo" cuando
        hablo en Castellano
    SliderComponent yo_mismo_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0, 0.20)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_cultura_que
      letterHeight = 0.03
      pos = (-0.7, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
           Me identifico con la cultura
           de los que hablan Quechua
    SliderComponent cultura_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0, 0.10)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_cultura_esp
      letterHeight = 0.03
      pos = (-0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
          Me identifico con la cultura
          de los que hablan Castellano
    SliderComponent cultura_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_uso_nativo_que
      letterHeight = 0.025
      pos = (-0.7, -0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                       Es importante para mí usar el Quechua
         como hablante nativo
    SliderComponent uso_nativo_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0, -0.10)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_uso_nativo_esp
      letterHeight = 0.025
      pos = (-0.7, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                       Es importante para mí usar el Castellano
         como hablante nativo
    SliderComponent uso_nativo_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0, -0.20)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
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    TextComponent text_habalnte_nativo_que
      letterHeight = 0.025
      pos = (-0.7, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
             Quiero que los demás piensen que
        soy hablante nativo de Quechua
    SliderComponent hablante_nativo_que
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
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    TextComponent text_hablante_nativo_esp
      letterHeight = 0.025
      pos = (-0.7, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
             Quiero que los demás piensen que
             soy hablante nativo de Castellano
    SliderComponent hablante_nativo_esp
      color = white
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('0=para nada','1','2','3','4','5','6=de acuerdo')
      letterHeight = 0.019
      pos = (0.0, -0.40)
      saveStartStop = False
      size = (0.8, -0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
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  Routine question
    RoutineSettingsComponent question
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if segment_number != 8:
            continueRoutine = False
      End Routine:
        # Convert response time from seconds to milliseconds
        if resp_q.rt is not None:
            resp_q_rt_ms = resp_q.rt * 1000
        else:
            resp_q_rt_ms = None

        # Label the F/J response as Sí/No
        if resp_q.keys == 'f':
            resp_label = 'Sí'
        elif resp_q.keys == 'j':
            resp_label = 'No'
        else:
            resp_label = 'Sin respuesta'

        # Add data to the PsychoPy output file
        thisExp.addData('resp_key', resp_q.keys)
        thisExp.addData('resp_label', resp_label)
        thisExp.addData('resp_q_rt_ms', resp_q_rt_ms)
    SoundComponent question_sound
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $"audio/" + audio_file
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_q
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = duration_ms / 1000
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
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      text:
        Para responder la pregunta presione:

        "F" = Sí

        "J" = No
    TextComponent cross_q
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruction_prueba
    RoutineSettingsComponent instruction_prueba
      saveStartStop = False
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    TextComponent intructions_2
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Primero escucharemos las instrucciones.

        Cuando termine el audio presione el boton marcado para continuar.
    TextComponent text_continuar_2
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 66
      text = [Presione el boton marcado para comenzar la prueba]
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    KeyboardComponent instructions_space_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 60
      store = nothing
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    SoundComponent prueba
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = audio/intro_seg1.wav
      startVal [time (s)] = 0.0
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  Routine trial_prueba
    RoutineSettingsComponent trial_prueba
      saveStartStop = False
      skipIf = segment_number == 7
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    SoundComponent audios_2
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $'C:/Users/AAPL/Desktop/SPL_Gabi/exp_1/audio/' + audio_file
      startVal [time (s)] = 0.0
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    TextComponent cross_2
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_prueba
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = duration_ms / 1000
      syncScreenRefresh = False
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  Routine questions_prueba
    RoutineSettingsComponent questions_prueba
      saveStartStop = False
      skipIf = segment_number != 7
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if segment_number != 7:
            continueRoutine = False
      End Routine:
        # Convert response time from seconds to milliseconds
        if resp_q.rt is not None:
            resp_q_rt_ms = resp_q.rt * 1000
        else:
            resp_q_rt_ms = None

        # Label the F/J response as Sí/No
        if resp_q.keys == 'f':
            resp_label = 'Sí'
        elif resp_q.keys == 'j':
            resp_label = 'No'
        else:
            resp_label = 'Sin respuesta'

        # Add data to the PsychoPy output file
        thisExp.addData('resp_key', resp_q.keys)
        thisExp.addData('resp_label', resp_label)
        thisExp.addData('resp_q_rt_ms', resp_q_rt_ms)
    SoundComponent question_sound_2
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $"audio/" + audio_file
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_q_2
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = duration_ms / 1000
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
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      text:
        Para responder la pregunta presione:

        "F" = Sí

        "J" = No
    TextComponent cross_q_2
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine delay_prueba
    RoutineSettingsComponent delay_prueba
      saveStartStop = False
      skipIf = segment_number != 7
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    TextComponent cross_q_3
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent space_delay
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine end_routine
    RoutineSettingsComponent end_routine
      saveStartStop = False
      stopVal [duration (s)] = 5.0
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        ¡Gracias por participar!

        Tinkunakama masiy.
  Routine start_prueba
    RoutineSettingsComponent start_prueba
      saveStartStop = False
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    TextComponent cross_q_4
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent space_delay_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine delay_trial
    RoutineSettingsComponent delay_trial
      saveStartStop = False
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    TextComponent cross_q_5
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent space_delay_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine list_setup
  Routine blp_bio
  Routine blp_historial_1
  Routine blp_historial_2
  Routine blp_uso_1
  Routine blp_uso_2
  Routine blp_uso_3
  Routine blp_competencia
  Routine blp_actitud
  Routine delay_trial
  Routine instruction_prueba
  LoopInitiator trials_prueba loopType="TrialHandler"
    conditionsFile = spl_stim_prueba.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audio_file', 'prue1_seg1.wav'), ('duration_ms', np.float64(3897.21)), ('segment_number', np.int64(1)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')]),
      OrderedDict([('audio_file', 'prue1_seg2.wav'), ('duration_ms', np.float64(1425.87)), ('segment_number', np.int64(2)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')]),
      OrderedDict([('audio_file', 'prue1_seg3.wav'), ('duration_ms', np.float64(1694.81)), ('segment_number', np.int64(3)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')]),
      OrderedDict([('audio_file', 'prue1_seg4.wav'), ('duration_ms', np.float64(1432.13)), ('segment_number', np.int64(4)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')]),
      OrderedDict([('audio_file', 'prue1_seg5.wav'), ('duration_ms', np.float64(1419.64)), ('segment_number', np.int64(5)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')]),
      OrderedDict([('audio_file', 'prue1_seg6.wav'), ('duration_ms', np.float64(1447.03)), ('segment_number', np.int64(6)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')]),
      OrderedDict([('audio_file', 'prue1_seg7.wav'), ('duration_ms', np.float64(3764.81)), ('segment_number', np.int64(7)), ('item_id', 'item_prue1'), ('list_prueba', np.int64(1)), ('spl_exp', 'prueba')])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
    Routine trial_prueba
    Routine questions_prueba
    Routine delay_prueba
  LoopTerminator trials_prueba
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $trial_list
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine question
    Routine delay_trial
  LoopTerminator trials
  Routine end_routine
